PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Delay Discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $"GBP " + str(reward_today) + " today or GBP " + str(future_reward) + " after " + str(delay) + " days"
    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/Devidhulesia/Downloads/Conditions_for_Delay_Discounting_100_unique.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', np.int64(11)), ('future_reward', np.int64(30)), ('delay', np.int64(7))]),
      OrderedDict([('reward_today', np.int64(12)), ('future_reward', np.int64(30)), ('delay', np.int64(9))]),
      OrderedDict([('reward_today', np.int64(12)), ('future_reward', np.int64(32)), ('delay', np.int64(10))]),
      OrderedDict([('reward_today', np.int64(13)), ('future_reward', np.int64(38)), ('delay', np.int64(12))]),
      OrderedDict([('reward_today', np.int64(14)), ('future_reward', np.int64(30)), ('delay', np.int64(13))]),
      OrderedDict([('reward_today', np.int64(14)), ('future_reward', np.int64(30)), ('delay', np.int64(15))]),
      OrderedDict([('reward_today', np.int64(15)), ('future_reward', np.int64(35)), ('delay', np.int64(16))]),
      OrderedDict([('reward_today', np.int64(16)), ('future_reward', np.int64(41)), ('delay', np.int64(18))]),
      OrderedDict([('reward_today', np.int64(16)), ('future_reward', np.int64(30)), ('delay', np.int64(20))]),
      OrderedDict([('reward_today', np.int64(17)), ('future_reward', np.int64(32)), ('delay', np.int64(21))]),
      OrderedDict([('reward_today', np.int64(18)), ('future_reward', np.int64(38)), ('delay', np.int64(23))]),
      OrderedDict([('reward_today', np.int64(18)), ('future_reward', np.int64(43)), ('delay', np.int64(24))]),
      OrderedDict([('reward_today', np.int64(19)), ('future_reward', np.int64(30)), ('delay', np.int64(26))]),
      OrderedDict([('reward_today', np.int64(20)), ('future_reward', np.int64(35)), ('delay', np.int64(27))])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
    Routine trial
  LoopTerminator trials
