PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = 0.0039, 0.0039, 0.0039
  expName = expectation effect solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 40
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent stim_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, 150)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $label
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    PolygonComponent stim_shape
      fillColor = -0.2549, 0.2392, 0.2549
      lineColor = -0.2549, 0.2392, 0.2549
      pos = (0, -20)
      shape = circle
      size = (200,200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.2
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    SliderComponent rating_slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 4
      labels = ['1','2','3','4','5','6','7']
      letterHeight = 30
      pos = (0, -0.4)
      size = (600, 60)
      startVal [time (s)] = 1.2
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.5
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    CodeComponent logCode
      Code Type = Auto->JS
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      End Routine:
        # End Routine: record slider rating & RT
        try:
            thisExp.addData('rating', rating_slider.getRating())
            thisExp.addData('rating_rt', rating_slider.getRT())
        except Exception as e:
            thisExp.addData('rating', '')
            thisExp.addData('rating_rt', '')
            print("DEBUG: couldn't read slider:", e)
        # log the label read (helpful for checking CSV reading)
        try:
            thisExp.addData('label_read', label)
        except NameError:
            thisExp.addData('label_read', 'MISSING_LABEL')
  Routine consent
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    TextComponent consent_text
      letterHeight = 40
      startVal [time (s)] = 0.0
      text = You are invited to take part in a short perception study. Press SPACE to begin.
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    KeyboardComponent consent_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instruction_text
      letterHeight = 40
      startVal [time (s)] = 0.0
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      text:
        You will see a grey circle on the screen with a word above it:
        either BRIGHT or DIM.

        After each circle, use the scale to rate how bright it looked.
        1 = very dim, 7 = very bright.

        Move the slider to show your rating.

        Press SPACE to start when ready.
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debrief
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    TextComponent debrief_text
      letterHeight = 40
      startVal [time (s)] = 0.0
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      text:
        Thank you.
        All circles were identical in brightness.
        Press SPACE to finish.
    KeyboardComponent debrief_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  Routine instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = CONDITIONS FOR SOLO PROJECT.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')]),
      OrderedDict([('label', 'BRIGHT')]),
      OrderedDict([('label', 'DIM')])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
    Routine trial
  LoopTerminator main_loop
  Routine debrief
