PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = motor sequence learning
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = -0.2549, 0.2392, 0.2549
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 1.5
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine trial_2
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    PolygonComponent fixation_2
      fillColor = -1.0000, -0.2157, -1.0000
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1_2
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3_2
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4_2
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe_2
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/Devidhulesia/Desktop/Psychopy/Visual Search/conditions for visual search.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/Devidhulesia/Desktop/Psychopy/Visual Search/conditions for visual search.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial_2
  LoopTerminator trials_2
